PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [800,600]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine localizer
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    ImageComponent localizer_img
      durationEstim = 0.5
      image = stimuli/Gesicht.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
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    TextComponent localizer_isi
      durationEstim = 2.5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer
      allowedKeys = 'y', 'g', 'b', 'r'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_correct
      durationEstim = 0.5
      sound = sounds/soundCoin.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong
      sound = sounds/soundError.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    CodeComponent localizer_code
      Code Type = Py
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      Begin Routine:
        localizer_img.image = df_localizer[f'img_block_{i_block}'].iloc[i_localizer]
        localizer_isi.duration = df_localizer[f'isi_block_{i_block}'].iloc[i_localizer]
        is_distractor = df_localizer[f'distractor_block_{i_block}'].iloc[i_localizer]

        # prevent inactive sound from blocking trial finish
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED

        played = False

        if is_distractor:
            localizer_img.ori  = 180
        else:
            localizer_img.ori  = 0

        msg = f'localizer {i_localizer}/{len(df_localizer[f"img_block_{i_block}"])}'
        msg += f' block {i_block} {"[FLIPPED]" if is_distractor else ""} isi={localizer_isi.duration:.2f}'
        print(msg)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer.keys) and not played:
            played = True
            if is_distractor:
                sound_correct.play()
                reward_count += reward_amount
            else:
                sound_wrong.play()
                reward_count -= reward_amount

        # play error in case of missed button press
        if is_distractor and key_resp_localizer.status==FINISHED and not played:
            played = True
            sound_wrong.play()
            reward_count -= reward_amount

        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
      End Routine:
        i_localizer+=1
  Routine sequence
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    ImageComponent sequence_img_1
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_1
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_2
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.164
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_2
      letterHeight = 0.05
      startVal [time (s)] = 0.264
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_3
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.328
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_3
      letterHeight = 0.05
      startVal [time (s)] = 0.428
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_4
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.492
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_4
      letterHeight = 0.05
      startVal [time (s)] = 0.592
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_5
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.656
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_5
      letterHeight = 0.05
      startVal [time (s)] = 0.756
      stopVal [duration (s)] = 0.064
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    CodeComponent sequence_code
      Code Type = Py
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      Begin Routine:
        for img_x in range(5):
            variables = locals()
            component_seq = variables[f'sequence_img_{img_x+1}']
            component_isi = variables[f'sequence_img_{img_x+1}']
            t_isi =  df_sequences[f'isi_block_{i_block}'].iloc[img_x]
            component_seq.image = df_sequences[f'img_block_{i_block}'].iloc[img_x]
            component_seq.start = (t_isi+0.1)*img_x
            component_isi.start = (t_isi+0.1)*img_x + 0.1
            component_isi.duration = t_isi
  Routine startup_code
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    CodeComponent enable_debug
      Code Type = Auto->JS
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      Before Experiment:
        enable_debug = True
    CodeComponent startup
      Code Type = Py
      Begin Experiment:
        import pandas as pd

        subj_id = expInfo['participant']
        df_localizer = pd.read_csv(f'./sequences/localizer_{subj_id}.csv')
        df_sequences = pd.read_csv(f'./sequences/sequences_{subj_id}.csv')

        print(subj_id)

        # set variables we will access later
        i_localizer = 0
        i_sequence = 0
        i_block = 0

        # store reward
        reward_count = 0

        # set the number of repetitions we have
        n_blocks = max(df_localizer['blocks'])
        n_localizer_trials = max(df_localizer['trial'])
        n_sequence_trials = max(df_sequences['trial'])
    CodeComponent settings
      Code Type = Auto->JS
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      Before Experiment:
        t_img_sequence = 0.1
        t_img_localizer = 0.5
        t_isi_localizer = 2.0

        reward_amount = 0.03  # +-3 ct per trial

        if 'enable_debug' in locals():
            print('DEBUG ENABLED. Timings reduced')
            n_localizer_trials = 5# max(df_localizer['trial'])
            n_sequence_trials = 4 #max(df_sequences['trial'])
  Routine buffer
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    TextComponent buffer_fixation
      color = -0.7960, -0.7960, -0.7960
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = •
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    SoundComponent sound_birds
      disabled = True
      sound = sounds/soundWait.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent buffer_code
      Code Type = Auto->JS
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      Begin Routine:
        isi = df_sequences[f'isi_block_{i_block}'].iloc[img_x]
        buffer_isi.duration = 6 - (5*0.1 + 5*isi)
      Each Frame:
        if buffer_fixation.status==FINISHED:
            sound_birds.stop()
  Routine question
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    KeyboardComponent question_key_resp
      allowedKeys = 'y','g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent question_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Did X come before Y?
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    CodeComponent question_code
      Code Type = Auto->JS
  Routine cue
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    TextComponent cue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy
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    CodeComponent cue_code
      Code Type = Py
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      Begin Experiment:
        localizer_img.image = df_localizer[f'img_block_{i_block}'].iloc[i_localizer]
        localizer_isi.duration = df_localizer[f'isi_block_{i_block}'].iloc[i_localizer]
        is_distractor = df_localizer[f'distractor_block_{i_block}'].iloc[i_localizer]
  Routine fixation_dot
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    TextComponent localizer_fixation
      color = -0.7960, -0.7960, -0.7960
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = •
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  Routine blank1500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine feedback
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    SoundComponent sound_correct_2
      durationEstim = 0.5
      sound = sounds/soundCoin.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong_2
      sound = sounds/soundError.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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Flow
  Routine startup_code
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks
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    LoopInitiator localizer_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials
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      Routine fixation_dot
      Routine localizer
    LoopTerminator localizer_trials
    LoopInitiator sequence_trials loopType="TrialHandler"
      loopType = random
      nReps = n_sequence_trials
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      Routine cue
      Routine blank1500
      Routine fixation_dot
      Routine sequence
      Routine buffer
      Routine question
      Routine feedback
    LoopTerminator sequence_trials
  LoopTerminator blocks
