PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = pygame
  Experiment info = {'participant': '0', 'session': '1'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = norm
  Window size (pixels) = [1400, 1050]
  expName = fast_replay_resting_state
  keyboardBackend = ioHub
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Routines
  Routine language_selection
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    TextComponent session_warning_text
      color = red
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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    PolygonComponent english_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent german_polygon
      durationEstim = 60.0
      fillColor = none
      lineWidth = 1.5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent german_flag
      durationEstim = 60.0
      flipHoriz = True
      image = stimuli/german_flag.png
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent english_flag
      durationEstim = 60.0
      image = stimuli/english_flag.png
      pos = (0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent german_text
      color = -1.0000, 1.0000, -1.0000
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Drücken Sie die linke (grün) Taste für Deutsch
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    TextComponent english_text
      color = 0.0588, 0.6157, 0.9608
      durationEstim = 60.0
      letterHeight = letter_height
      pos = (0.5, -0.25)
      startVal [time (s)] = 0.0
      text = Press the right (blue) button for English
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    KeyboardComponent choice_key
      allowedKeys = 'g','b'
      durationEstim = 60.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent choice_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        session = int(expInfo['session'])

        if session not in [1,2]:
            session_warning_text.text = f'ERROR: {session=}, but must be either "1" (pre) or "2" (post)\n Bitte diesen Fehler dem Experimentleiter mitteilen \n ------------\nPlease let the experimentator know about this error.'
      End Routine:
        if choice_key.keys == "g":
            german_polygon.borderColor = [1, 0.2941, -1]
            language = "german"
        elif choice_key.keys == "b":
            english_polygon.borderColor = [1, 0.2941, -1]
            language = "english"
  Routine instructions
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    KeyboardComponent key_resp
      allowedKeys = 'y', 'r', 'g', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instr
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = error
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if language=='german':
            if session==1:
                text_instruction = 'Herzlich willkommen beim Experiment!\n\nDas Experiment beginnt nun mit einer einfachen Aufgabe.'
            elif session==2:
                text_instruction = 'Jetzt folgt der letzte Teil des Experiments\n\nDieser Teil ist gleich wie der Teil ganz am Anfang.'

            text_instruction += '\n\nIn diesem Teil messen wir einen sogenannten "resting state", d.h. eine Art "Grundzustand" ihres Gehirns, wenn sie gerade keine aktive Aufgabe erledigen.'
            text_instruction += '\n\nBitte setzen Sie sich bequem hin und bleiben Sie möglichst still sitzen. Halten Sie die nächsten 5 Minuten Ihre Augen geschlossen und versuchen Sie sich zu entspannen. Lassen Sie Ihre Gedanken frei schweifen, ohne sich auf spezifische Gedanken oder Aufgaben zu konzentrieren.'
            text_instruction += '\n\nFalls Sie noch Fragen zur Aufgabe haben, lassen Sie es den Experimentleiter bitte jetzt wissen.'
            text_instruction += '\nSchließen Sie nun einfach Ihre Augen und drücken Sie eine Taste um zu beginnen. Wir lassen Sie wissen, wenn die 5 Minuten herum sind.'
        elif language=='english':
            if session == 1:
                text_instruction = 'Welcome to the experiment!\n\nThe experiment will now begin with a simple task.'
            elif session == 2:
                text_instruction = 'Now follows the last part of the experiment\n\nThis part is the same as the one at the very beginning.'

            text_instruction += '\n\nIn this part, we measure a so-called "resting state", i.e., a kind of "baseline state" of your brain when you are not performing an active task.'
            text_instruction += '\n\nPlease sit down comfortably and try to stay as still as possible. Keep your eyes closed for the next 5 minutes and try to relax. Let your thoughts wander freely without focusing on specific thoughts or tasks.'
            text_instruction += '\n\nIf you have any questions about the task, please let the experimentator know now.'
            text_instruction += '\nNow simply close your eyes and press a key to begin. We will let you know when the 5 minutes are over.'

        text_instr.text = text_instruction
  Routine RS
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    TextComponent text
      durationEstim = 300
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rs_length
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        start_time = time.time()
        last_print = time.time()

        send_trigger(trigger_rs_start)
      Each Frame:
        if (time.time()-last_print)>5:
            last_print = time.time()
            print(f'{int(last_print-start_time)}/{rs_length} seconds elapsed')
      End Routine:
        send_trigger(trigger_rs_end)
  Routine end_screen
    SoundComponent sound_1
      sound = ./sounds/soundCoin.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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
    TextComponent text_final
      color = black
      letterHeight = letter_height
      startVal [time (s)] = 0.0
      text = error
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    KeyboardComponent key_resp_2
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_final
      Code Type = Auto->JS
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      Begin Routine:
        if language=='german':
            if session==1:
                text_final.text = 'Dieser Experimentteil ist nun vorbei. '
            if session==2:
                text_final.text = 'Das Experiment ist nun vorbei, vielen Dank für Ihre Teilnahme! '
            text_final.text += '\n\nBitte melden Sie sich beim Experimentleiter.'
        if language=='english':
            if session==1:
                text_final.text = 'This part of the experiment is now over. '
            if session==2:
                text_final.text = 'The experiment is now finished, thanks for participating! '
            text_final.text += '\n\nPlease let the experimentator know that you are done.'

        win.color = "#b0c4de"
        win.flip()
  Routine settings
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    CodeComponent startup
      Code Type = Auto->JS
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      Before Experiment:
        import time
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)

        trigger_rs_start = 1
        trigger_rs_end = 2
    CodeComponent parameters
      Code Type = Auto->JS
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      Before Experiment:
        rs_length = 15
        letter_height = 0.06
Flow
  Routine settings
  Routine language_selection
  Routine instructions
  Routine RS
  Routine end_screen
